PsychoPy2experiment version="2021.3.0"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1440, 900]
  expName = crowding
  exportHTML = manually
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Routines
  Routine trial
    CodeComponent definitions
      Code Type = Py
      Begin Routine:
        windowWidthCm = 60
        windowWidthPx = win.size[0]
        pxPerCm = windowWidthPx / windowWidthCm
        viewingDistanceDesiredCm = condition['viewingDistanceDesiredCm']
        fixationXYPx = [0, 0]

        block = condition['blockOrder']

        spacingDirection = condition['spacingDirection']
        targetFont = condition['targetFont']

        targetAlphabet = list(condition['targetAlphabet'])
        validAns = [x.lower() for x in targetAlphabet]

        conditionTrials = condition['conditionTrials']
        targetDurationSec = condition['targetDurationSec']

        fixationSizeNow = 30 if condition['fixationYes'] else 0
        targetMinimumPix = condition['targetMinimumPix']
        spacingOverSizeRatio = condition['spacingOverSizeRatio']

        targetEccentricityXDeg = condition['targetEccentricityXDeg']
        targetEccentricityYDeg = condition['targetEccentricityYDeg']
        targetEccentricityXYDeg = [targetEccentricityXDeg, targetEccentricityYDeg]

        trackGazeYes = condition['trackGazeYes']
        trackHeadYes = condition['trackHeadYes']
        wirelessKeyboardNeededYes = condition['wirelessKeyboardNeededYes']
    StaticComponent ISI
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    CodeComponent set_side
      Code Type = Py
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      Begin Routine:
        from random import choice

        # set random letter
        alphabet = targetAlphabet
        firstFlanker = choice(alphabet)
        targetStim = choice(alphabet)
        secondFlanker = choice(alphabet)
        correctAns = targetStim.lower()

        # Define shift per trial
        # ???
        spacingDeg = 10**level - 0.15

        # Crowding changes per trial
        # radial
        if spacingDirection == 'radial':
            if targetEccentricityXDeg < 0:
                pos1XYDeg = np.subtract(targetEccentricityXYDeg, [spacingDeg, 0])
                pos2XYDeg = targetEccentricityXYDeg
                pos3XYDeg = np.add(targetEccentricityXYDeg, [spacingDeg, 0])
                levelLeft = level
            elif targetEccentricityXDeg > 0:
                pos1XYDeg = np.subtract(targetEccentricityXYDeg, [spacingDeg, 0])
                pos2XYDeg = targetEccentricityXYDeg
                pos3XYDeg = np.add(targetEccentricityXYDeg, [spacingDeg, 0])
                levelRight = level

        # tangential
        if spacingDirection == 'tangential':
            if targetEccentricityYDeg < 0:
                pos1XYDeg = np.subtract(targetEccentricityXYDeg, [0, spacingDeg])
                pos2XYDeg = targetEccentricityXYDeg
                pos3XYDeg = np.add(targetEccentricityXYDeg, [0, spacingDeg])
                levelLeft = level
            elif targetEccentricityYDeg > 0:
                pos1XYDeg = np.subtract(targetEccentricityXYDeg, [0, spacingDeg])
                pos2XYDeg = targetEccentricityXYDeg
                pos3XYDeg = np.add(targetEccentricityXYDeg, [0, spacingDeg])
                levelRight = level

        # convert deg to pixels
        pos1XYPx = [0, 0]
        pos2XYPx = [0, 0]
        pos3XYPx = [0, 0]
        listXY = [0, 1]
        for i in listXY:
            pos1XYPx[i] = viewingDistanceDesiredCm * 2 * \
                np.tan(0.5*pos1XYDeg[i] * np.pi/180) * pxPerCm + fixationXYPx[i]
            pos2XYPx[i] = viewingDistanceDesiredCm * 2 * \
                np.tan(0.5*pos2XYDeg[i] * np.pi/180) * pxPerCm + fixationXYPx[i]
            pos3XYPx[i] = viewingDistanceDesiredCm * 2 * \
                np.tan(0.5*pos3XYDeg[i] * np.pi/180) * pxPerCm + fixationXYPx[i]

        # Adjust height
        if spacingDirection == 'radial':
            spacingPx = pos2XYPx[0] - pos1XYPx[0]
        elif spacingDirection == 'tangential':
            spacingPx = pos2XYPx[1] - pos1XYPx[1]

        heightPx = max(spacingPx / spacingOverSizeRatio, targetMinimumPix)
    CodeComponent end
      Code Type = Py
      End Experiment:
        print('Log threshold right is: ', levelLeft)
        print('Threshold spacing right is: ', 10**levelLeft - 0.15, ' deg')
        print('Log threshold right is: ', levelRight)
        print('Threshold spacing right is: ', 10**levelRight - 0.15, ' deg')
    KeyboardComponent key_resp
      allowedKeys [set every repeat] = ['a', 'c', 'e', 'n', 'o', 'r', 's', 'u', 'v', 'x', 'z']
      correctAns = $correctAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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    GratingComponent fixation
      color = black
      mask = cross
      sf = none
      size [set every repeat] = fixationSizeNow
      startVal [time (s)] = 0
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    TextComponent flanker1
      color = black
      font [set every repeat] = $targetFont
      letterHeight [set every repeat] = heightPx
      pos [set every repeat] = pos1XYPx
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = targetDurationSec
      text [set every repeat] = $firstFlanker
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    TextComponent target
      color = black
      font [set every repeat] = $targetFont
      letterHeight [set every repeat] = heightPx
      pos [set every repeat] = pos2XYPx
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = targetDurationSec
      text [set every repeat] = $targetStim
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    TextComponent flanker2
      color = black
      font [set every repeat] = $targetFont
      letterHeight [set every repeat] = heightPx
      pos [set every repeat] = pos3XYPx
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = targetDurationSec
      text [set every repeat] = $secondFlanker
      units = pix
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  Routine filter
    CodeComponent begin
      Code Type = Py
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      Begin Experiment:
        thisLoopNumber = 0
        thisConditionsFile = './conditions/block_1.csv'
      Begin Routine:
        import pandas as pd
        import numpy as np

        thisLoopNumber += 1
        thisConditionsFile = './conditions/block_{}.csv'.format(thisLoopNumber)

        this_df = pd.read_csv(thisConditionsFile)

        # TODO To be removed
        if len(np.unique(this_df['conditionTrials'])) > 1:
            raise ValueError('conditionTrials for each condition in the same block must match.')

        conditionTrials = this_df['conditionTrials'][0]

        print('=== New Block {} ==='.format(thisLoopNumber))
  Routine file
    CodeComponent preprocess
      Code Type = Py
      Before Experiment:
        # https://stackoverflow.com/a/58267676/11069914
        import pandas as pd
        import numpy as np
        from csv import reader, writer

        # Transpose

        with open('experiment.csv', encoding='utf-8') as f, open('experiment_t.csv', 'w', encoding='utf-8') as fw:
            writer(fw, delimiter=',').writerows(zip(*reader(f, delimiter=',')))

        # Make output directory

        if not os.path.exists('./conditions'):
            os.makedirs('./conditions')

        df = pd.read_csv('experiment_t.csv')
        print('*********************************')

        # Check parameter spelling
        # TODO

        # Translate researcher configuration to PsychoPy default
        df_keys = df.keys()

        df.rename(columns={
            'conditionName': 'label',
            'thresholdGuess': 'startVal',
            'thresholdBeta': 'beta',
            'thresholdDelta': 'delta',
            'thresholdProbability': 'pThreshold'
        }, inplace=True)
        if 'thresholdGuessLogSd' in df_keys:
            # Special case
            df['startValSd'] = np.log(df['thresholdGuessLogSd'])

        # Export separate files

        dataBlockRange = df['blockOrder'].unique()
        dataBlockRange = dataBlockRange.tolist()

        for i, value in enumerate(dataBlockRange):
            df[df['blockOrder'] == value].to_csv('./conditions/block_' + str(value) + '.csv', index = False)

        blockCount = len(dataBlockRange)
Flow
  Routine file
  LoopInitiator blocks loopType="TrialHandler"
    loopType = sequential
    nReps = blockCount
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    Routine filter
    LoopInitiator trials loopType="MultiStairHandler"
      conditionsFile = $thisConditionsFile
      loopType = interleaved staircases
      nReps = conditionTrials
      stairType = QUEST
      switchMethod = fullRandom
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      Routine trial
    LoopTerminator trials
  LoopTerminator blocks
