PsychoPy2experiment version="2021.3.1"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1440, 900]
  expName = threshold
  exportHTML = manually
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Routines
  Routine trial
    CodeComponent definitions
      Code Type = Both
      Begin JS Experiment:
        let windowWidthCm
        let windowWidthPx
        let pxPerCm
        let viewingDistanceDesiredCm
        let fixationXYPx

        let block

        let spacingDirection
        let targetFont

        let targetAlphabet
        let validAns

        let conditionTrials
        let targetDurationSec

        let fixationSizeNow
        let targetMinimumPix
        let spacingOverSizeRatio

        let targetEccentricityXDeg
        let targetEccentricityYDeg
        let targetEccentricityXYDeg

        let trackGazeYes
        let trackHeadYes
        let wirelessKeyboardNeededYes
      Begin JS Routine:
        windowWidthCm = 50
        windowWidthPx = window.size[0]
        pxPerCm = windowWidthPx / windowWidthCm
        viewingDistanceDesiredCm = condition['viewingDistanceDesiredCm']
        fixationXYPx = [0, 0]

        block = condition['blockOrder']

        spacingDirection = condition['spacingDirection']
        targetFont = condition['targetFont']

        targetAlphabet = condition['targetAlphabet'].split('')
        validAns = condition['targetAlphabet'].toLowerCase().split('')

        conditionTrials = condition['conditionTrials']
        targetDurationSec = condition['targetDurationSec']

        fixationSizeNow = condition['markTheFixationYes'] === 'TRUE' ? 30 : 0
        targetMinimumPix = condition['targetMinimumPix']
        spacingOverSizeRatio = condition['spacingOverSizeRatio']

        targetEccentricityXDeg = condition['targetEccentricityXDeg']
        targetEccentricityYDeg = condition['targetEccentricityYDeg']
        targetEccentricityXYDeg = [targetEccentricityXDeg, targetEccentricityYDeg]

        trackGazeYes = condition['trackGazeYes'] === 'TRUE'
        trackHeadYes = condition['trackHeadYes'] === 'TRUE'
        wirelessKeyboardNeededYes = condition['wirelessKeyboardNeededYes'] == 'TRUE'
      Begin Routine:
        windowWidthCm = 50
        windowWidthPx = win.size[0]
        pxPerCm = windowWidthPx / windowWidthCm
        viewingDistanceDesiredCm = condition['viewingDistanceDesiredCm']
        fixationXYPx = [0, 0]

        block = condition['blockOrder']

        spacingDirection = condition['spacingDirection']
        targetFont = condition['targetFont']

        targetAlphabet = list(condition['targetAlphabet'])
        validAns = [x.lower() for x in targetAlphabet]

        conditionTrials = condition['conditionTrials']
        targetDurationSec = condition['targetDurationSec']

        fixationSizeNow = 30 if condition['markTheFixationYes'] == 'TRUE' else 0
        targetMinimumPix = condition['targetMinimumPix']
        spacingOverSizeRatio = condition['spacingOverSizeRatio']

        targetEccentricityXDeg = condition['targetEccentricityXDeg']
        targetEccentricityYDeg = condition['targetEccentricityYDeg']
        targetEccentricityXYDeg = [targetEccentricityXDeg, targetEccentricityYDeg]

        trackGazeYes = condition['trackGazeYes'] == 'TRUE'
        trackHeadYes = condition['trackHeadYes'] == 'TRUE'
        wirelessKeyboardNeededYes = condition['wirelessKeyboardNeededYes'] == 'TRUE'
    StaticComponent ISI
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    CodeComponent set_side
      Code Type = Both
      Begin JS Routine:
        var alphabet = targetAlphabet
        var firstFlanker = alphabet[Math.floor(Math.random() * alphabet.length)]
        var targetStim = alphabet[Math.floor(Math.random() * alphabet.length)]
        var secondFlanker = alphabet[Math.floor(Math.random() * alphabet.length)]
        var correctAns = targetStim.toLowerCase()

        var heightPx, levelLeft, levelRight, listXY
        var pos1XYDeg, pos1XYPx, pos2XYDeg, pos2XYPx, pos3XYDeg, pos3XYPx
        var spacingDeg, spacingPx

        spacingDeg = (Math.pow(10, level) - 0.15);

        if (spacingDirection === "radial") {
            pos1XYDeg = [targetEccentricityXYDeg[0] - spacingDeg, targetEccentricityXYDeg[1]]
            pos2XYDeg = targetEccentricityXYDeg;
            pos3XYDeg = [targetEccentricityXYDeg[0] + spacingDeg, targetEccentricityXYDeg[1]]
            if (targetEccentricityXYDeg < 0) {
                levelLeft = level;
            } else {
                levelRight = level;
            }
        } else if (spacingDirection == 'tangential') {
            pos1XYDeg = [targetEccentricityXYDeg[0], targetEccentricityXYDeg[1] - spacingDeg]
            pos2XYDeg = targetEccentricityXYDeg;
            pos3XYDeg = [targetEccentricityXYDeg[0], targetEccentricityXYDeg[1] + spacingDeg]
            if (targetEccentricityYDeg < 0) {
                levelLeft = level
            } else {
                levelRight = level
            }
        }

        pos1XYPx = [0, 0];
        pos2XYPx = [0, 0];
        pos3XYPx = [0, 0];
        listXY = [0, 1];

        for (let i in listXY) {
            pos1XYPx[i] = viewingDistanceDesiredCm * 2 * Math.tan(0.5 * pos1XYDeg[i] * Math.PI / 180) * pxPerCm + fixationXYPx[i]
            pos2XYPx[i] = viewingDistanceDesiredCm * 2 * Math.tan(0.5 * pos2XYDeg[i] * Math.PI / 180) * pxPerCm + fixationXYPx[i]
            pos3XYPx[i] = viewingDistanceDesiredCm * 2 * Math.tan(0.5 * pos3XYDeg[i] * Math.PI / 180) * pxPerCm + fixationXYPx[i]
        }

        if (spacingDirection === 'radial') {
            spacingPx = pos2XYPx[0] - pos1XYPx[0]
        } else if (spacingDirection === 'tangential') {
            spacingPx = pos2XYPx[1] - pos1XYPx[1]
        }

        heightPx = Math.max(spacingPx / spacingOverSizeRatio, targetMinimumPix)
      Begin Routine:
        from random import choice

        # set random letter
        alphabet = targetAlphabet
        firstFlanker = choice(alphabet)
        targetStim = choice(alphabet)
        secondFlanker = choice(alphabet)
        correctAns = targetStim.lower()

        # Define shift per trial
        # ???
        spacingDeg = 10**level - 0.15

        # Crowding changes per trial
        # radial
        if spacingDirection == 'radial':
            if targetEccentricityXDeg < 0:
                pos1XYDeg = np.subtract(targetEccentricityXYDeg, [spacingDeg, 0])
                pos2XYDeg = targetEccentricityXYDeg
                pos3XYDeg = np.add(targetEccentricityXYDeg, [spacingDeg, 0])
                levelLeft = level
            elif targetEccentricityXDeg > 0:
                pos1XYDeg = np.subtract(targetEccentricityXYDeg, [spacingDeg, 0])
                pos2XYDeg = targetEccentricityXYDeg
                pos3XYDeg = np.add(targetEccentricityXYDeg, [spacingDeg, 0])
                levelRight = level

        # tangential
        if spacingDirection == 'tangential':
            if targetEccentricityYDeg < 0:
                pos1XYDeg = np.subtract(targetEccentricityXYDeg, [0, spacingDeg])
                pos2XYDeg = targetEccentricityXYDeg
                pos3XYDeg = np.add(targetEccentricityXYDeg, [0, spacingDeg])
                levelLeft = level
            elif targetEccentricityYDeg > 0:
                pos1XYDeg = np.subtract(targetEccentricityXYDeg, [0, spacingDeg])
                pos2XYDeg = targetEccentricityXYDeg
                pos3XYDeg = np.add(targetEccentricityXYDeg, [0, spacingDeg])
                levelRight = level

        # convert deg to pixels
        pos1XYPx = [0, 0]
        pos2XYPx = [0, 0]
        pos3XYPx = [0, 0]
        listXY = [0, 1]
        for i in listXY:
            pos1XYPx[i] = viewingDistanceDesiredCm * 2 * \
                np.tan(0.5*pos1XYDeg[i] * np.pi/180) * pxPerCm + fixationXYPx[i]
            pos2XYPx[i] = viewingDistanceDesiredCm * 2 * \
                np.tan(0.5*pos2XYDeg[i] * np.pi/180) * pxPerCm + fixationXYPx[i]
            pos3XYPx[i] = viewingDistanceDesiredCm * 2 * \
                np.tan(0.5*pos3XYDeg[i] * np.pi/180) * pxPerCm + fixationXYPx[i]

        # Adjust height
        if spacingDirection == 'radial':
            spacingPx = pos2XYPx[0] - pos1XYPx[0]
        elif spacingDirection == 'tangential':
            spacingPx = pos2XYPx[1] - pos1XYPx[1]

        heightPx = max(spacingPx / spacingOverSizeRatio, targetMinimumPix)
    CodeComponent end
      Code Type = Both
      End Experiment:
        print('Log threshold right is: ', levelLeft)
        print('Threshold spacing right is: ', 10**levelLeft - 0.15, ' deg')
        print('Log threshold right is: ', levelRight)
        print('Threshold spacing right is: ', 10**levelRight - 0.15, ' deg')
      End JS Experiment:
        console.log('Log threshold right is: ', levelLeft)
        console.log('Threshold spacing right is: ', Math.pow(10, levelLeft) - 0.15, ' deg')
        console.log('Log threshold right is: ', levelRight)
        console.log('Threshold spacing right is: ', Math.pow(10, levelRight) - 0.15, ' deg')
    KeyboardComponent key_resp
      allowedKeys [set every repeat] = ['a', 'c', 'e', 'n', 'o', 'r', 's', 'u', 'v', 'x', 'z']
      correctAns = $correctAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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    GratingComponent fixation
      color = black
      mask = cross
      sf = none
      size [set every repeat] = fixationSizeNow
      startVal [time (s)] = 0
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    TextComponent flanker1
      color = black
      font [set every repeat] = $targetFont
      letterHeight [set every repeat] = heightPx
      pos [set every repeat] = pos1XYPx
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = targetDurationSec
      text [set every repeat] = $firstFlanker
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    TextComponent target
      color = black
      font [set every repeat] = $targetFont
      letterHeight [set every repeat] = heightPx
      pos [set every repeat] = pos2XYPx
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = targetDurationSec
      text [set every repeat] = $targetStim
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    TextComponent flanker2
      color = black
      font [set every repeat] = $targetFont
      letterHeight [set every repeat] = heightPx
      pos [set every repeat] = pos3XYPx
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = targetDurationSec
      text [set every repeat] = $secondFlanker
      units = pix
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  Routine filter
    CodeComponent begin
      Code Type = Both
      Begin Experiment:
        thisLoopNumber = 0
        thisConditionsFile = './conditions/block_1.csv'
      Begin JS Experiment:
        thisLoopNumber = 0
        thisConditionsFile = './conditions/block_1.csv'
      Begin JS Routine:
        thisLoopNumber += 1
        thisConditionsFile = `conditions/block_${thisLoopNumber}.csv`

        //if len(np.unique(this_df['conditionTrials'])) > 1:
        //    raise ValueError('conditionTrials for each condition in the same block must match.')

        conditionTrials = 4
      Begin Routine:
        import pandas as pd
        import numpy as np

        thisLoopNumber += 1
        thisConditionsFile = './conditions/block_{}.csv'.format(thisLoopNumber)

        this_df = pd.read_csv(thisConditionsFile)

        # TODO To be removed
        if len(np.unique(this_df['conditionTrials'])) > 1:
            raise ValueError('conditionTrials for each condition in the same block must match.')

        conditionTrials = this_df['conditionTrials'][0]

        #print('=== New Block {} ==='.format(thisLoopNumber))
Flow
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = conditions/blockCount.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('block', 0)]),
      OrderedDict([('block', 1)])]
    Routine filter
    LoopInitiator trials loopType="MultiStairHandler"
      conditionsFile = $thisConditionsFile
      loopType = interleaved staircases
      nReps = conditionTrials
      stairType = QUEST
      switchMethod = fullRandom
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      Routine trial
    LoopTerminator trials
  LoopTerminator blocks
